PsychoPy2experiment version="3.0.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 800]
  color = black
  expName = emo_stroop
  logging level = warning
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Routines
  Routine feedback
    CodeComponent code_feedback
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        # (empy string)
        msg=''
      Begin Routine:
        # Message if correct response
        if resp_practice.corr:#stored on last run routine
          msg=u"¡Correcto!"

        # Message if incorrect response
        else:
          msg=u"¡Error!"
    TextComponent text_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine set_trial_blocks
    CodeComponent code_set_trial_blocks
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd

        # Specify the name of the file that specifies the
        # range of trials in each block
        block_ranges = pd.read_csv('choose_blocks.csv')

        # Randomize experiment blocks
        block_ranges_exp = list(block_ranges.choose_blocks_exp)
        random.shuffle(block_ranges_exp)
  Routine set_block
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random
        import pandas as pd
        block_ranges = pd.read_csv('choose_blocks.csv')

        # Prepare practice blocks
        block_ranges_practice = list(block_ranges.choose_blocks_practice)
        print(block_ranges_practice)
        random.shuffle(block_ranges_practice)


        # Prepare experiment blocks
        block_ranges_exp = list(block_ranges.choose_blocks_exp)
        random.shuffle(block_ranges_exp)
        print (2, block_ranges_exp)
  Routine instruct
    TextComponent instr_exp
      color = $[1, 1, 1]
      letterHeight = 0.07
      startVal [time (s)] = 0
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      text:
        ¿Listo para comenzar el experimento real?

        Recuerda, ignora la palabra en sí misma.

        Presiona:
        f para letras rojas
        j para letras verdes
        "espacio" para letras azules

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready_exp
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        ¡Completaste el experimento!

        ¡Muchas gracias!
  Routine feedback_4
  Routine instructPractice
    TextComponent instr_practice
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Recuerda, ignora la palabra.

        Presiona:
        f para letras rojas
        j para letras verdes
        "espacio" para letras azules

        Vamos a comenzar con unos ejercicios de práctica

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready_practice
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Rest
    CodeComponent code_rest
      Code Type = Py
      Begin Experiment:
        # Initial value for the trial number
        trial_exp_number = 0
      Begin Routine:
        # Presents a break if trial number in  list
        # If number of trials changes, and the trial
        # at which the rest will be presented,
        # the list needs to be updated with the
        # trial number after which there should be
        # a break
        if trial_exp_number not in [36, 72, 108]:
            continueRoutine = False

        # Needs to be updated after verifying
        # the trial number so it correctly
        # presents the break after the specified
        # trial
        trial_exp_number += 1
    TextComponent text_rest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        ¡Toma un descanso!

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready_rest
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISI
    PolygonComponent black_screen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine trial_exp
    TextComponent fixation_cross_exp
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent word_exp
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $text
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    ParallelOutComponent p_port
      address = 0x0378
      startData = $trigger
      startVal [time (s)] = 1.5
      stopData = 0
      stopVal [duration (s)] = 2.0
      syncScreen = True
    KeyboardComponent resp_exp
      allowedKeys = 'f', 'j', 'space'
      correctAns = $corrAns
      durationEstim = 2
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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    TextComponent feedback_too_slow
      letterHeight = 0.1
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
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      text:
        ¡Muy lento!

        ¡Intenta responder más rápido!
    CodeComponent code_timeout
      Code Type = Py
      Each Frame:
        # Ends the routine if the participant has
        # taken more than 2 seconds to respond, after
        # presenting a message that they took too
        # long to respond.

        # The absolute time from the start of the
        # routine has to be used (fixation cross
        # + stim + keyboard + message).
        if t > 4.5:
            continueRoutine = False
  Routine trial_practice
    TextComponent fixation_cross_practice
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent word_practice
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 1.5
      text [set every repeat] = $text
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    KeyboardComponent resp_practice
      allowedKeys = 'f', 'j', 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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Flow
  Routine set_trial_blocks
  Routine instructPractice
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice_trials.csv
    loopType = random
    nReps = 4
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    Routine trial_practice
    Routine feedback
    Routine ISI
  LoopTerminator practice_loop
  Routine instruct
  LoopInitiator blocks_loop loopType="TrialHandler"
    loopType = random
    nReps = len(block_ranges_exp)
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    LoopInitiator trials_exp_loop loopType="TrialHandler"
      Selected rows = $block_ranges_exp.pop()
      conditionsFile = exp_trials.csv
      endPoints = [1, 2]
      loopType = random
      nReps = 1
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      Routine trial_exp
      Routine ISI
      Routine Rest
    LoopTerminator trials_exp_loop
  LoopTerminator blocks_loop
  Routine thanks
